PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = kathrine_thesis_experiment_v3
  keyboardBackend = ioHub
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Routines
  Routine welcome_screen
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    TextComponent welcome_text
      color [set every frame] = $white_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Press SPACEBAR to begin
    KeyboardComponent welcome_key_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
      End Routine:
        draw_square(white_square_welcome)
        send_trigger_value(trigger_dict.get("Experiment start"))
    PolygonComponent white_square_welcome
      fillColor [set every frame] = $white_color
      lineColor [set every frame] = $white_color
      pos = (0.88, -0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine blank_500
    RoutineSettingsComponent blank_500
      stopVal [duration (s)] = 0.5
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  Routine goodbye_screen
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    TextComponent goodbye_text
      color [set every frame] = $white_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press SPACEBAR to end experiment
    KeyboardComponent goodbye_key_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_cross
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    PolygonComponent white_cross
      fillColor [set every frame] = $white_color
      lineColor [set every frame] = $white_color
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
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    CodeComponent code_fixation_cross
      Code Type = Py
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      Begin Routine:
        draw_square(white_square_fc)
        send_trigger(trigger_dict.get("Fixation cross"))
    PolygonComponent white_square_fc
      fillColor [set every frame] = $white_color
      lineColor [set every frame] = $white_color
      pos = (0.88, -0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine init
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    CodeComponent init_position_and_variables
      Code Type = Py
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      Before Experiment:
        #import numpy as np
        from human_mouse_trajectory import HumanizeMouseTrajectory
        #import random
        from psychopy import parallel
        import csv
        import math

        # Define your parallel port address
        #port_address = 0x378  # Example address, use the correct address for your setup
        port_address = 0x3FF8
        port = parallel.ParallelPort(address=port_address)

        # Function to send trigger
        def send_trigger_value(trigger_value):
            #port.write(str(trigger_value).encode("utf-8"))
            #port.setData(trigger_value)
            win.callOnFlip(port.setData, trigger_value)
            win.flip()
            core.wait(0.003)
            port.setData(0)
            #port.setData(trigger_value.to_bytes(1, byteorder = "big"))
            #port.setData(str(trigger_value).encode("utf-8"))
            #port.setPin(2, 1)  # Trigger on pin 2 (adjust pin as needed)
            #port.setPin(2, 0)  # Reset pin
            print("trigger")
            print(str(trigger_value))
            #print(str(str(trigger_value).encode("UTF")))
            with open('debug.txt', 'a') as f:
                f.write(str(trigger_value) + "\n")

        def send_trigger_test(trigger_value):
            if isinstance(trigger_value, int):
                trigger_value += 100
            #port.write(str(trigger_value).encode("utf-8"))
            #port.setData(trigger_value)
            win.callOnFlip(port.setData, trigger_value)
            win.flip()
            core.wait(0.003)
            port.setData(0)
            #port.setData(trigger_value.to_bytes(1, byteorder = "big"))
            #port.setData(str(trigger_value).encode("utf-8"))
            #port.setPin(2, 1)  # Trigger on pin 2 (adjust pin as needed)
            #port.setPin(2, 0)  # Reset pin
            print("trigger")
            print(str(trigger_value))
            #print(str(str(trigger_value).encode("UTF")))
            with open('debug.txt', 'a') as f:
                f.write(str(trigger_value) + "\n")

        if os.path.exists("debug.txt"):
            os.remove("debug.txt")
      Begin Routine:
        #green_color = (-1.0000, 0.0039, -1.0000)
        green_color = (0, 179, 0)
        black_color = (-1.0000, -1.0000, -1.0000)
        white_color = (1.0000, 1.0000, 1.0000)

        #partner_color = (1.0000, 0.7098, 0.4510)
        #partner_color = (1.0000, 0.6471, 0.1922)
        partner_color = (1.0000, 0.2623, -0.3412)
        #loner_color = (0.0588, 0.6157, 0.9608)
        loner_color = (-0.2549, 0.2392, 0.2549)

        # Initiale object positions
        #interactive_partner_pos = [-500, 390]
        #loner_pos = [500, 390]
        #position_list = [(500, 400), (-500, 400)]
        position_list = [(400, 400), (-400, 400)]

        default_hand_size = 0.085

        partner_pos = position_list[0]
        loner_pos = position_list[1]

        move = 70
        #possible_end_pos = [[-320, 210-move],[0,440-move],[320, 210-move],[200, -180-move],[-200, -180-move]]

        possible_end_pos = [[-700, 50],[-350, 50],[0, 50],[350, 50],[700, 50]]
        target_pos = [(-0.700, 0.050),(-0.350,0.050),(0, 0.050),(0.350, 0.050),(0.700, 0.050)]

        #[[200, -180], [-200, -180], [-320, 210], [0,440], [320, 210]]
        N_POS = 5
        block_no = -1
        trial_no = 0
        n_trials_before_break_test = 9
        n_trials_before_break = 15

        n_repeat_per_condition = 30
        # conditions = [1]*n_repeat_per_condition + [2]*n_repeat_per_condition + [5]*n_repeat_per_condition
        conditions = [(1,"interactive partner"), (5,"interactive partner"),
                      (1,"individual partner"), (5,"individual partner"),
                      (1,"individual loner"), (5,"individual loner"),
                      (1,"individual loner"), (5,"individual loner"),
                      (0, "no go")] * n_repeat_per_condition

        test_conditions = [(1,"interactive partner"), (5,"individual partner"), (5,"interactive partner"),
                        (1,"interactive partner"),(1,"individual loner"), (5,"interactive partner"),(0, "no go"),
                        (1,"interactive partner"), (5,"interactive partner"), (0, "no go"),
                      (1,"individual partner"), (5,"individual partner"), (5,"individual loner"),(0, "no go"),
                      (1,"individual loner"),(1,"interactive partner"), (5,"interactive partner"),
                      (0, "no go")]
        #triggers = {k: i for i,k in enumerate(conditions)}
        #triggers["mouse movement"] = len(triggers)

        #trigger_dict = {"Interactive partner 1 start" : 1, "Interactive partner 1 text onset" : 2, "Interactive partner 1 partner movement onset" : 3, "Interactive partner 1 partner movement end" : 4, "Interactive partner 1 participant movement onset" : 5, "Interactive partner 1 participant movement end" : 6,"Interactive partner 2 start" : 7,"Interactive partner 2 text onset" : 8, "Interactive partner 2 partner movement onset" : 9, "Interactive partner 2 partner movement end" : 10, "Interactive partner 2 participant movement onset" : 11, "Interactive partner 2 participant movement end" : 12, "Interactive partner 5 start" : 13, "Interactive partner 5 text onset" : 14, "Interactive partner 5 partner movement onset" : 15, "Interactive partner 5 partner movement end" : 16, "Interactive partner 5 participant movement onset" : 17, "Interactive partner 5 participant movement end" : 18, "Individual partner 1 start" : 19, "Individual partner 1 text onset" : 20, "Individual partner 1 partner movement onset 1" : 21, "Individual partner 1 partner movement end 1" : 22, "Individual partner 1 partner movement onset 2" : 23, "Individual partner 1 partner movement end 2" : 24, "Individual partner 2 start" : 25, "Individual partner 2 text onset" : 26, "Individual partner 2 partner movement onset 1" : 27, "Individual partner 2 partner movement end 1" : 28, "Individual partner 2 partner movement onset 2" : 29, "Individual partner 2 partner movement end 2" : 30 , "Individual partner 5 start" : 31, "Individual partner 5 text onset" : 32, "Individual partner 5 partner movement onset 1" : 33, "Individual partner 5 partner movement end 1" : 34, "Individual partner 5 partner movement onset 2" : 35, "Individual partner 5 partner movement end 2" : 36, "Individual loner 1 start" : 37, "Individual loner 1 text onset" : 38,"Individual loner 1 loner movement onset 1" : 39, "Individual loner 1 loner movement end 1" : 40, "Individual loner 1 loner movement onset 2": 41, "Individual loner 1 loner movement end 2" : 42, "Individual loner 2 start" : 43, "Individual loner 2 text onset" : 44, "Individual loner 2 loner movement onset 1" : 45, "Individual loner 2 loner movement end 1" : 46, "Individual loner 2 loner movement onset 2" : 47, "Individual loner 2 loner movement end 2" : 48, "Individual loner 5 start" : 49, "Individual loner 5 text onset" : 50, "Individual loner 5 loner movement onset 1": 51, "Individual loner 5 loner movement end 1": 52, "Individual loner 5 loner movement onset 2" : 53, "Individual loner 5 loner movement end 2" : 54, "No go start" : 55, "No go text onset": 56, "Fixation cross": 57}
        trigger_dict = {"Interactive partner 1 start" : 1, "Interactive partner 1 partner movement onset" : 2, "Interactive partner 1 partner movement end" : 3, "Interactive partner 1 participant movement onset" : 4, "Interactive partner 1 participant movement end" : 5,"Interactive partner 2 start" : 6, "Interactive partner 2 partner movement onset" : 7, "Interactive partner 2 partner movement end" : 8, "Interactive partner 2 participant movement onset" : 9, "Interactive partner 2 participant movement end" : 10, "Interactive partner 5 start" : 11, "Interactive partner 5 partner movement onset" : 12, "Interactive partner 5 partner movement end" : 13, "Interactive partner 5 participant movement onset" : 14, "Interactive partner 5 participant movement end" : 15, "Individual partner 1 start" : 16, "Individual partner 1 partner movement onset 1" : 17, "Individual partner 1 partner movement end 1" : 18, "Individual partner 1 partner movement onset 2" : 19, "Individual partner 1 partner movement end 2" : 20, "Individual partner 2 start" : 21, "Individual partner 2 partner movement onset 1" : 22, "Individual partner 2 partner movement end 1" : 23, "Individual partner 2 partner movement onset 2" : 24, "Individual partner 2 partner movement end 2" : 25 , "Individual partner 5 start" : 26, "Individual partner 5 partner movement onset 1" : 27, "Individual partner 5 partner movement end 1" : 28, "Individual partner 5 partner movement onset 2" : 29, "Individual partner 5 partner movement end 2" : 30, "Individual loner 1 start" : 31,"Individual loner 1 loner movement onset 1" : 32, "Individual loner 1 loner movement end 1" : 33, "Individual loner 1 loner movement onset 2": 34, "Individual loner 1 loner movement end 2" : 35, "Individual loner 2 start" : 36, "Individual loner 2 loner movement onset 1" : 37, "Individual loner 2 loner movement end 1" : 38, "Individual loner 2 loner movement onset 2" : 39, "Individual loner 2 loner movement end 2" : 40, "Individual loner 5 start" : 41, "Individual loner 5 loner movement onset 1": 42, "Individual loner 5 loner movement end 1": 43, "Individual loner 5 loner movement onset 2" : 44, "Individual loner 5 loner movement end 2" : 45, "No go start" : 46, "Fixation cross": 47, "Experiment start": 48, "Experiment end": 49, "Block start": 50}


        # conditions = conditions * n_repeat_per_condition
        n_total_trials = len(conditions) + len(test_conditions)
        shuffle(conditions)
        #shuffle(test_conditions)

        def sample_cond(conditions):
            condition = conditions.pop(0)
            n_green, cond = condition
            if cond.split(" ")[0] == "interactive":
                cond_text = "Interactive"
                img = "hand_icon_both.png"
            if cond.split(" ")[0] == "individual":
                cond_text = "Non-interactive"
                img = "hand_icon_right.png"
            if cond.split(" ")[0] == "no":
                cond_text = "No go"
                img = "hand_icon_nogo.png"
            end_index = randint(0,N_POS)

            if n_green == 0:
                green_indices = []
            elif n_green == 1:
                green_indices = [end_index]
            elif n_green == 2:
                green_2 = end_index + randchoice([-2,2])

                green_2 += N_POS if green_2 < 0 else -N_POS if green_2 >= N_POS else 0
                green_indices = [end_index, green_2]

            elif n_green == 5:
                green_indices = list(range(N_POS))

            return cond, end_index, green_indices, condition, cond_text, img

        def draw_square(square_name):
            square_name.draw()
            with open('debug.txt', 'a') as f:
                f.write(f"white_sqaure\n")
            return

         # Initialize the headers for the csv-file

        #headers = ["subject_number","cond","trial_number","block_number","selected_target","possible_targets","rt_trajectory1","rt_trajectory2","rt_participant","trajectory_positions","trajectory_timestamps","sd_trajectory"]
        headers = ["subject_number", "cond", "trial_number", "block_number", "selected_target", "possible_targets", "rt_trajectory1", "rt_trajectory2", "rt_participant", "trajectory_positions", "trajectory_timestamps", "sd_trajectory", "cond_start_time", "first_time_click", "second_time_click", "partner_loner_movement_end", "partner_loner_movement_start"]

        filename = f"{expInfo.get('participant')}_{expInfo.get('expName')}_{expInfo.get('date')}.csv"

        with open(filename, mode='w', newline='') as file:
            writer = csv.DictWriter(file, fieldnames=headers)

            # Write the headers
            writer.writeheader()

        def mouse_constrain(circle):
            # Begin Routine
            circle_radius = circle.size[0] / 2  # Assuming the circle's size is defined as [width, height]
            circle_center = circle.pos  # Assuming circle is the name of your circle stimulus
            mouse = event.Mouse(win=win)
            mouse_x, mouse_y = mouse.getPos()
            distance = ((mouse_x - circle_center[0])**2 + (mouse_y - circle_center[1])**2)**0.5
            if distance > circle_radius:
                angle = math.atan2(mouse_y - circle_center[1], mouse_x - circle_center[0])
                mouse_x = circle_center[0] + circle_radius * math.cos(angle)
                mouse_y = circle_center[1] + circle_radius * math.sin(angle)
                mouse.setPos((mouse_x, mouse_y))




        send_trigger = send_trigger_value
      End Experiment:
        draw_square(white_square_init)
        send_trigger(trigger_dict.get("Experiment end"))
    PolygonComponent white_square_init
      fillColor [set every frame] = $white_color
      lineColor [set every frame] = $white_color
      pos = (0.88, -0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine inter_trial_interval
    RoutineSettingsComponent inter_trial_interval
      stopVal [duration (s)] = 3.0
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    PolygonComponent partner_6
      fillColor [set every frame] = $partner_color
      lineColor [set every frame] = $partner_color
      pos [set every frame] = partner_pos[0]/1000,partner_pos[1]/1000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent loner_6
      fillColor [set every frame] = $loner_color
      lineColor [set every frame] = $loner_color
      pos [set every frame] = loner_pos[0]/1000,loner_pos[1]/1000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent participant_6
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      pos = (0, -0.43)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent target
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[0]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_6
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[1]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_7
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[2]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_8
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[3]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_9
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[4]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        shuffle(position_list)

        partner_pos = position_list[0]
        loner_pos = position_list[1]
        partner_6.pos = partner_pos
        loner_6.pos = loner_pos
        trial_no += 1
      Each Frame:
        mouse_constrain(participant_6)
    TextComponent partner_text
      color [set every frame] = $white_color
      letterHeight = 0.030
      pos [set every frame] = (partner_pos[0])/1000,(partner_pos[1]+67)/1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = Partner
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    TextComponent loner_text
      color [set every frame] = $white_color
      letterHeight = 0.030
      pos [set every frame] = (loner_pos[0])/1000,(loner_pos[1]+67)/1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = Loner
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    ImageComponent smiley_image_partner
      image = test_smiley5.png
      pos [set every frame] = partner_pos[0]/1000,(partner_pos[1]-8)/1000
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent smiley_image_loner
      image = test_smiley5.png
      pos [set every frame] = loner_pos[0]/1000,(loner_pos[1]-8)/1000
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine calculate_path
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    CodeComponent mouse_trajectory
      Code Type = Py
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      Begin Routine:
        print(expInfo['frameRate'])
        color_change_time = round(expInfo['frameRate']*2)

        # Generate a random time for the movement start (between 2.2 and 3 seconds from trial begin)
        response_time = 1 + 0.5*random() # seconds= min_seconds + random number between 0 and 1
        n_response_frames = round(expInfo['frameRate']*response_time)

        if block_no == 0:
            current_condition, end_index, green_indices, condition, cond_text, img = sample_cond(test_conditions)
        else:
            current_condition, end_index, green_indices, condition, cond_text, img = sample_cond(conditions)

        hand_size = (default_hand_size ,default_hand_size ) if img.find("both") == -1 else \
                    (default_hand_size*2, default_hand_size)


        end_pos = possible_end_pos[end_index]

        if current_condition == "individual loner":
            start_pos = loner_pos[0], loner_pos[1]-50
        else:
            start_pos = partner_pos[0], partner_pos[1]-50

        # time for trajectory with distance taken into account
        distance = np.linalg.norm(np.array(start_pos)-np.array(end_pos)) # distance from object to the 5 target positions
        num_sec = distance/2000 + 0.2 + 0.2*random()
        num_frames = round(expInfo['frameRate']*num_sec)
        print('FRAMERATE:')
        print(expInfo['frameRate'])
        trajectory = HumanizeMouseTrajectory(start_pos,
                                             end_pos,
                                             offset_boundary_x = 10,
                                             offset_boundary_y = 10,
                                             distortion_mean = 0.0, #1.2,
                                             distortion_st_dev = 0.5, #1.2,
                                             distortion_frequency = 1,
                                             target_points = num_frames,
                                             knots_count = 1)

        # Convert pixels to arbitrary psychopy dimensions
        positions_x = np.array(trajectory.points)[:, 0]/1000
        positions_y = np.array(trajectory.points)[:, 1]/1000

        if current_condition in ["individual partner","individual loner"]:
            num_sec_reverse = distance/2000 + 0.2 + 0.2*random()
            num_frames_reverse = round(expInfo['frameRate']*num_sec)
            trajectory_reverse = HumanizeMouseTrajectory(end_pos,
                                                 start_pos,
                                                 offset_boundary_x = 10,
                                                 offset_boundary_y = 10,
                                                 distortion_mean = 0.0, #1.2,
                                                 distortion_st_dev = 0.5, #1.2,
                                                 distortion_frequency = 1,
                                                 target_points = num_frames_reverse)

            # Convert pixels to arbitrary psychopy dimensions
            positions_reverse_x = np.array(trajectory_reverse.points)[:, 0]/1000
            positions_reverse_y = np.array(trajectory_reverse.points)[:, 1]/1000

            # calculate response time
            response_time = 0.025 + 0.025 * random()
            n_wait_frames = round(expInfo['frameRate']+response_time)

        i_frame = 0
        key_list = ["subject_number", "cond", "trial_number", "block_number", "selected_target", "possible_targets", "rt_trajectory1", "rt_trajectory2", "rt_participant", "trajectory_positions", "trajectory_timestamps", "sd_trajectory", "cond_start_time", "first_time_click", "second_time_click", "partner_loner_movement_end", "partner_loner_movement_start"]

        dict_temp = {k: [] for k in key_list}
        dict_temp["subject_number"] = f"{expInfo.get('participant')}"
        dict_temp["cond"] = str(condition)
        dict_temp["trial_number"] = trial_no
        dict_temp["block_number"] = block_no
        dict_temp["selected_target"] = end_index
        dict_temp["possible_targets"] = green_indices

        if current_condition != "no go":
            dict_temp["rt_trajectory1"] = num_sec


        if current_condition in ["individual partner","individual loner"]:
            dict_temp["rt_trajectory2"] = num_sec_reverse

        with open('debug.txt', 'a') as f:
            f.write(f"condition: {current_condition}\n")
            f.write(f"index: {end_index}\n")
            f.write(f"green: {green_indices}\n")
            f.write(f"start: {partner_pos}\n")
            f.write(f"end: {end_pos}\n")
            f.write(f"distance: {distance}\n")
            f.write(f"w: {distance/2000}\n")
  Routine cond
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    PolygonComponent white_square
      fillColor [set every frame] = $white_color
      lineColor [set every frame] = $white_color
      pos = (0.88, -0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent partner_5
      fillColor [set every frame] = $partner_color
      lineColor [set every frame] = $partner_color
      pos [set every frame] = partner_pos[0]/1000,partner_pos[1]/1000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent loner_5
      fillColor [set every frame] = $loner_color
      lineColor [set every repeat] = $loner_color
      pos [set every frame] = loner_pos[0]/1000,loner_pos[1]/1000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent participant_5
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      pos = (0, -0.43)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent target_1
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[0]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_2
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[1]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_3
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[2]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_4
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[3]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_5
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[4]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent moving_object_cond_mml
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every frame] = start_pos
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    CodeComponent code_moving_object_cond1_2
      Code Type = Py
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      Begin Routine:
        targets = [target_1, target_2, target_3, target_4, target_5]

        for idx in range(N_POS):
            if idx in green_indices:
                targets[idx].setLineColor(green_color)
            else:
                targets[idx].setLineColor(white_color)
        # Set the initial position of the object
        i_frame = 0
        moving_object_cond_mml.pos = [positions_x[i_frame], positions_y[i_frame]]

        pick_status = False
        text_shown = False
        partner_movement_start = False
        movement_begin = False
        mouse = None
        moving_object_cond_mml.opacity = 1
        i_frame = 0
        first_click_time = None
        second_click_time = None
        trajectory_recording = False
        trajectory_positions = []
        trajectory_timestamps = []
      Each Frame:
        if i_frame == 0:
            cond_start_time = globalClock.getTime()
            draw_square(white_square)
            if condition == (1,'interactive partner'):
                send_trigger(trigger_dict.get("Interactive partner 1 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Interactive partner 1 start\n")
            if condition == (2,'interactive partner'):
                send_trigger(trigger_dict.get("Interactive partner 2 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Interactive partner 2 start\n")
            if condition == (5,'interactive partner'):
                send_trigger(trigger_dict.get("Interactive partner 5 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Interactive partner 5 start\n")
            if condition == (1,'individual partner'):
                send_trigger(trigger_dict.get("Individual partner 1 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual partner 1 start\n")
            if condition == (2,'individual partner'):
                send_trigger(trigger_dict.get("Individual partner 2 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual partner 2 start\n")
            if condition == (5,'individual partner'):
                send_trigger(trigger_dict.get("Individual partner 5 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual partner 5 start\n")
            if condition == (1,'individual loner'):
                send_trigger(trigger_dict.get("Individual loner 1 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual loner 1 start\n")
            if condition == (2,'individual loner'):
                send_trigger(trigger_dict.get("Individual loner 2 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual loner 2 start\n")
            if condition == (5,'individual loner'):
                send_trigger(trigger_dict.get("Individual loner 5 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual loner 5 start\n")
            if condition == (0, 'no go'):
                send_trigger(trigger_dict.get("No go start"))
                with open('debug.txt', 'a') as f:
                    f.write("No go start\n")
            if mouse is None:
                    mouse = event.Mouse(win=win)
            mouse.setPos((0, -0.43))

        if current_condition == "no go":
            moving_object_cond_mml.opacity = 0
            mouse_constrain(participant_5)
            if i_frame/expInfo['frameRate'] > 3: # wait or 3 seconds before moving on to next condition
                continueRoutine = False

        elif current_condition == "interactive partner":

            if i_frame < n_response_frames:
                moving_object_cond_mml.pos = [positions_x[0], positions_y[0]]
                mouse_constrain(participant_5)

            elif i_frame < n_response_frames + num_frames:
                mouse_constrain(participant_5)
                movement_start_time = globalClock.getTime()
                if partner_movement_start == False:
                    draw_square(white_square)
                    if condition == (1, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 1 partner movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 1 partner movement onset\n")
                    if condition == (2, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 2 partner movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 2 partner movement onset\n")
                    if condition == (5, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 5 partner movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 5 partner movement onset\n")
                    partner_movement_start = True
                idx = i_frame-n_response_frames
                moving_object_cond_mml.pos = [positions_x[idx], positions_y[idx]]  # Update cursor position

                if [positions_x[idx], positions_y[idx]] == [positions_x[-1], positions_y[-1]]:
                    movement_end_time = globalClock.getTime()
                    draw_square(white_square)
                    if condition == (1, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 1 partner movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 1 partner movement end\n")
                    if condition == (2, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 2 partner movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 2 partner movement end\n")
                    if condition == (5, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 5 partner movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 5 partner movement end\n")


            else:
            #elif i_frame-n_response_frames >= num_frames:

                moving_object_cond_mml.pos = [positions_x[-1], positions_y[-1]]

                if movement_begin == False:

                    movement_begin = True

                if mouse is None:
                    mouse = event.Mouse(win=win)

                if mouse.isPressedIn(moving_object_cond_mml) and pick_status == False:
                    first_click_time = globalClock.getTime()
                    draw_square(white_square)
                    if condition == (1, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 1 participant movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 1 participant movement onset\n")
                            f.write(f"{first_click_time}\n")
                    if condition == (2, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 2 participant movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 2 participant movement onset\n")
                            f.write(f"{first_click_time}\n")
                    if condition == (5, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 5 participant movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 5 participant movement onset\n")
                            f.write(f"{first_click_time}\n")
                    mouse_x, mouse_y = mouse.getPos()
                    # Update the polygon position based on mouse movement
                    moving_object_cond_mml.setPos((mouse_x, mouse_y))
                    moving_object_cond_mml.draw()
                    pick_status = True
                    trajectory_recording = True

                if trajectory_recording == True:
                    trajectory_positions.append(mouse.getPos())
                    trajectory_timestamps.append(globalClock.getTime())

                if pick_status == True:
                    mouse_x, mouse_y = mouse.getPos()
                    moving_object_cond_mml.setPos((mouse_x, mouse_y))

                if mouse.isPressedIn(participant_5):
                    second_click_time = globalClock.getTime()
                    pick_status = False
                    trajectory_recording = False
                    draw_square(white_square)
                    if condition == (1, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 1 participant movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 1 participant movement end\n")
                    if condition == (2, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 2 participant movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 2 participant movement end\n")
                    if condition == (5, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 5 participant movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 5 participant movement end\n")
                    continueRoutine = False

        else:
            mouse_constrain(participant_5)
            if i_frame < n_response_frames:
                moving_object_cond_mml.pos = [positions_x[0], positions_y[0]]
            elif i_frame < n_response_frames + num_frames:
                if [positions_x[idx], positions_y[idx]] == [positions_x[1], positions_y[1]]:
                    draw_square(white_square)
                    movement_start_time = globalClock.getTime()
                    if condition == (1,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 1 partner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 1 partner movement onset 1\n")
                    if condition == (2,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 2 partner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 2 partner movement onset 1\n")
                    if condition == (5,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 5 partner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 5 partner movement onset 1\n")
                    if condition == (1,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 1 loner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 1 loner movement onset 1\n")
                    if condition == (2,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 2 loner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 2 loner movement onset 1\n")
                    if condition == (5,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 5 loner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 5 loner movement onset 1\n")


                idx = i_frame - n_response_frames
                moving_object_cond_mml.pos = [positions_x[idx], positions_y[idx]]

                if [positions_x[idx], positions_y[idx]] == [positions_x[-1], positions_y[-1]]:
                    movement_end_time = globalClock.getTime()
                    draw_square(white_square)
                    if condition == (1,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 1 partner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 1 partner movement end 1\n")
                    if condition == (2,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 2 partner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 2 partner movement end 1\n")
                    if condition == (5,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 5 partner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 5 partner movement end 1\n")
                    if condition == (1,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 1 loner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 1 loner movement end 1\n")
                    if condition == (2,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 2 loner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 2 loner movement end 1\n")
                    if condition == (5,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 5 loner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 5 loner movement end 1\n")
            elif i_frame < n_response_frames + num_frames + n_wait_frames:
                moving_object_cond_mml.pos = [positions_x[-1], positions_y[-1]]
            elif i_frame < n_response_frames + num_frames + n_wait_frames + num_frames_reverse:
                if [positions_reverse_x[idx], positions_reverse_y[idx]] == [positions_reverse_x[1], positions_reverse_y[1]]:
                    draw_square(white_square)
                    if condition == (1,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 1 partner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 1 partner movement onset 2\n")
                    if condition == (2,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 2 partner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 2 partner movement onset 2\n")
                    if condition == (5,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 5 partner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 5 partner movement onset 2\n")
                    if condition == (1,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 1 loner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 1 loner movement onset 2\n")
                    if condition == (2,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 2 loner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 2 loner movement onset 2\n")
                    if condition == (5,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 5 loner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 5 loner movement onset 2\n")

                idx = i_frame - (n_response_frames + num_frames + n_wait_frames)
                moving_object_cond_mml.pos = [positions_reverse_x[idx], positions_reverse_y[idx]]
                if [positions_reverse_x[idx], positions_reverse_y[idx]] == [positions_reverse_x[-1], positions_reverse_y[-1]]:
                    draw_square(white_square)
                    if condition == (1,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 1 partner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 1 partner movement end 2\n")
                    if condition == (2,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 2 partner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 2 partner movement end 2\n")
                    if condition == (5,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 5 partner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 5 partner movement end 2\n")
                    if condition == (1,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 1 loner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 1 loner movement end 2\n")
                    if condition == (2,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 2 loner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 2 loner movement end 2\n")
                    if condition == (5,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 5 loner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 5 loner movement end 2\n")
            else:
                moving_object_cond_mml.pos = [positions_reverse_x[-1], positions_reverse_y[-1]]
                continueRoutine = False


        # increment i_frame
        i_frame += 1
      End Routine:

        if first_click_time is not None and second_click_time is not None:
            print('HERE')
            print(first_click_time)
            print('AND')
            print(second_click_time)
            time_difference = second_click_time - first_click_time
            dict_temp['rt_participant'] = time_difference


        print(str(condition))
        print('trajectory positions')
        print(trajectory_positions)
        print('trajectory_timestamps')
        print(trajectory_timestamps)
        dict_temp['trajectory_positions'] = trajectory_positions
        dict_temp['trajectory_timestamps'] = trajectory_timestamps
        dict_temp['cond_start_time'] = cond_start_time
        dict_temp['first_time_click'] = first_click_time
        dict_temp['second_time_click'] = second_click_time
        dict_temp['partner_loner_movement_end'] = movement_end_time
        dict_temp['partner_loner_movement_start'] = movement_start_time
        key_list = ["subject_number", "cond", "trial_number", "block_number", "selected_target", "possible_targets", "rt_trajectory1", "rt_trajectory2", "rt_participant", "trajectory_positions", "trajectory_timestamps", "sd_trajectory", "cond_start_time", "first_time_click", "second_time_click", "partner_loner_movement_end", "partner_loner_movement_start"]

        print(dict_temp)
        print(dict_temp.keys())
        with open('debug.txt', 'a') as f:
                    f.write(f"dict temp: {dict_temp}\n")
                    f.write(f"dict temp: {dict_temp.keys()}\n")

        with open(filename, mode='a', newline='') as file:
            writer = csv.DictWriter(file, fieldnames=dict_temp.keys())
            if file.tell() == 0:
                writer.writeheader()
            writer.writerow(dict_temp)

        for idx in range(N_POS):
            targets[idx].setLineColor(black_color)
    MouseComponent mouse_cond1_2
      clickable = moving_object_cond_mml, participant_5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [condition] = i_frame-350 >= num_frames
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    TextComponent partner_text_2
      color [set every frame] = $white_color
      letterHeight = 0.030
      pos [set every frame] = (partner_pos[0])/1000,(partner_pos[1]+67)/1000
      startVal [time (s)] = 0.0
      text [set every frame] = Partner
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    TextComponent loner_text_2
      color [set every frame] = $white_color
      letterHeight = 0.030
      pos [set every frame] = (loner_pos[0])/1000,(loner_pos[1]+67)/1000
      startVal [time (s)] = 0.0
      text [set every frame] = Loner
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    ImageComponent smiley_image_partner_2
      image = test_smiley5.png
      pos [set every frame] = partner_pos[0]/1000,(partner_pos[1]-8)/1000
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent smiley_image_loner_2
      image = test_smiley5.png
      pos [set every frame] = loner_pos[0]/1000,(loner_pos[1]-8)/1000
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent hand_icon
      image [set every frame] = $img
      pos = (0, 0.42)
      size [set every frame] = $hand_size
      startVal [time (s)] = 0.0
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  Routine block_inc
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        block_no += 1
  Routine do_fixation
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if block_no < 0:
            do_fixation = 1
            block_no += 1
        elif (trial_no % n_trials_before_break_test == 0) and (block_no == 0):
            do_fixation = 1
            block_no += 1
        elif ((trial_no - n_trials_before_break_test) % n_trials_before_break) == 0 and (block_no > 0):
            do_fixation = 1
            block_no += 1
        else:
            do_fixation = 0
  Routine block_start
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    KeyboardComponent block_begin_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent block_text
      color [set every frame] = $white_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        draw_square(white_square_block)


        if block_no == 0:
            send_trigger = send_trigger_test
        else:
            send_trigger = send_trigger_value



        send_trigger(trigger_dict["Block start"])
      Each Frame:
        if block_no == 0:
            block_text.text = f"Are you ready for the test block? \n If yes then click on the SPACEBAR"
        else:
            block_text.text = f"Are you ready for block number {block_no}? \n If yes then click on the SPACEBAR"
    PolygonComponent white_square_block
      fillColor [set every frame] = $white_color
      lineColor [set every frame] = $white_color
      pos = (0.88, -0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine trial_block_start
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    KeyboardComponent block_begin_response_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent block_text_2
      color [set every frame] = $white_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        draw_square(white_square_block)
        send_trigger(trigger_dict.get("Trial block start"))
      Each Frame:
        block_text.text = f"Are you ready for the trial block? \n If yes then click on the SPACEBAR"
    PolygonComponent white_square_block_2
      fillColor [set every frame] = $white_color
      lineColor [set every frame] = $white_color
      pos = (0.88, -0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine trial_inter_trial_interval
    RoutineSettingsComponent trial_inter_trial_interval
      stopVal [duration (s)] = 3.0
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    PolygonComponent partner
      fillColor [set every frame] = $partner_color
      lineColor [set every frame] = $partner_color
      pos [set every frame] = partner_pos[0]/1000,partner_pos[1]/1000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent loner
      fillColor [set every frame] = $loner_color
      lineColor [set every frame] = $loner_color
      pos [set every frame] = loner_pos[0]/1000,loner_pos[1]/1000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent participant
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      pos = (0, -0.43)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent target_10
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[0]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_11
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[1]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_12
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[2]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_13
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[3]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_14
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[4]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        shuffle(position_list)

        partner_pos = position_list[0]
        loner_pos = position_list[1]

        partner_6.pos = partner_pos
        loner_6.pos = loner_pos
        trial_no += 1
    TextComponent partner_text_3
      color [set every frame] = $white_color
      letterHeight = 0.030
      pos [set every frame] = (partner_pos[0])/1000,(partner_pos[1]+67)/1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = Partner
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    TextComponent loner_text_3
      color [set every frame] = $white_color
      letterHeight = 0.030
      pos [set every frame] = (loner_pos[0])/1000,(loner_pos[1]+67)/1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = Loner
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    ImageComponent smiley_image_partner_3
      image = test_smiley5.png
      pos [set every frame] = partner_pos[0]/1000,(partner_pos[1]-8)/1000
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent smiley_image_loner_3
      image = test_smiley5.png
      pos [set every frame] = loner_pos[0]/1000,(loner_pos[1]-8)/1000
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine trial_calculate_path
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    CodeComponent mouse_trajectory_2
      Code Type = Py
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      Begin Routine:
        print(expInfo['frameRate'])
        color_change_time = round(expInfo['frameRate']*2)

        # Generate a random time for the movement start (between 2.2 and 3 seconds from trial begin)
        response_time = 1 + 0.5*random() # seconds= min_seconds + random number between 0 and 1
        n_response_frames = round(expInfo['frameRate']*response_time)

        current_condition, end_index, green_indices, condition, cond_text, img = sample_cond(conditions)
        hand_size = (default_hand_size ,default_hand_size ) if img.find("both") == -1 else \
                    (default_hand_size*2, default_hand_size)


        end_pos = possible_end_pos[end_index]

        if current_condition == "individual loner":
            start_pos = loner_pos[0], loner_pos[1]-50
        else:
            start_pos = partner_pos[0], partner_pos[1]-50

        # time for trajectory with distance taken into account
        distance = np.linalg.norm(np.array(start_pos)-np.array(end_pos)) # distance from object to the 5 target positions
        num_sec = distance/2000 + 0.2 + 0.2*random()
        num_frames = round(expInfo['frameRate']*num_sec)
        print('FRAMERATE:')
        print(expInfo['frameRate'])
        trajectory = HumanizeMouseTrajectory(start_pos,
                                             end_pos,
                                             offset_boundary_x = 10,
                                             offset_boundary_y = 10,
                                             distortion_mean = 0.0, #1.2,
                                             distortion_st_dev = 0.5, #1.2,
                                             distortion_frequency = 1,
                                             target_points = num_frames,
                                             knots_count = 1)

        # Convert pixels to arbitrary psychopy dimensions
        positions_x = np.array(trajectory.points)[:, 0]/1000
        positions_y = np.array(trajectory.points)[:, 1]/1000

        if current_condition in ["individual partner","individual loner"]:
            num_sec_reverse = distance/2000 + 0.2 + 0.4*random()
            num_frames_reverse = round(expInfo['frameRate']*num_sec)
            trajectory_reverse = HumanizeMouseTrajectory(end_pos,
                                                 start_pos,
                                                 offset_boundary_x = 10,
                                                 offset_boundary_y = 10,
                                                 distortion_mean = 0.0, #1.2,
                                                 distortion_st_dev = 0.5, #1.2,
                                                 distortion_frequency = 1,
                                                 target_points = num_frames_reverse)

            # Convert pixels to arbitrary psychopy dimensions
            positions_reverse_x = np.array(trajectory_reverse.points)[:, 0]/1000
            positions_reverse_y = np.array(trajectory_reverse.points)[:, 1]/1000

            # calculate response time
            response_time = 0.025 + 0.025 * random()
            n_wait_frames = round(expInfo['frameRate']+response_time)

        i_frame = 0
        key_list = ["subject_number", "cond", "trial_number", "block_number", "selected_target", "possible_targets", "rt_trajectory1", "rt_trajectory2", "rt_participant", "trajectory_positions", "trajectory_timestamps", "sd_trajectory"]

        dict_temp = {k: [] for k in key_list}
        dict_temp["subject_number"] = f"{expInfo.get('participant')}"
        dict_temp["cond"] = str(condition)
        dict_temp["trial_number"] = trial_no
        dict_temp["block_number"] = block_no
        dict_temp["selected_target"] = end_index
        dict_temp["possible_targets"] = green_indices

        if current_condition != "no go":
            dict_temp["rt_trajectory1"] = num_sec


        if current_condition in ["individual partner","individual loner"]:
            dict_temp["rt_trajectory2"] = num_sec_reverse

        with open('debug.txt', 'a') as f:
            f.write(f"condition: {current_condition}\n")
            f.write(f"index: {end_index}\n")
            f.write(f"green: {green_indices}\n")
            f.write(f"start: {partner_pos}\n")
            f.write(f"end: {end_pos}\n")
  Routine trial_cond
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    PolygonComponent white_square_2
      fillColor [set every frame] = $white_color
      lineColor [set every frame] = $white_color
      pos = (0.88, -0.5)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent partner_7
      fillColor [set every frame] = $partner_color
      lineColor [set every frame] = $partner_color
      pos [set every frame] = partner_pos[0]/1000,partner_pos[1]/1000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent loner_7
      fillColor [set every frame] = $loner_color
      lineColor [set every repeat] = $loner_color
      pos [set every frame] = loner_pos[0]/1000,loner_pos[1]/1000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent participant_7
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      pos = (0, -0.43)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent target_15
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[0]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_16
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[1]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_17
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[2]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_18
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[3]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_19
      fillColor [set every frame] = $black_color
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 4
      pos [set every frame] = target_pos[4]
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent moving_object_cond_mml_2
      fillColor = 0.3961, -0.7333, -0.7333
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every frame] = start_pos
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    CodeComponent code_moving_object_cond1
      Code Type = Py
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      Begin Routine:
        targets = [target_1, target_2, target_3, target_4, target_5]

        for idx in range(N_POS):
            if idx in green_indices:
                targets[idx].setLineColor(green_color)
            else:
                targets[idx].setLineColor(white_color)
        # Set the initial position of the object
        i_frame = 0
        moving_object_cond_mml.pos = [positions_x[i_frame], positions_y[i_frame]]

        pick_status = False
        text_shown = False
        partner_movement_start = False
        movement_begin = False
        mouse = None
        moving_object_cond_mml.opacity = 1
        i_frame = 0
        first_click_time = None
        second_click_time = None
        trajectory_recording = False
        trajectory_positions = []
        trajectory_timestamps = []
      Each Frame:
        if i_frame == 0:
            cond_start_time = globalClock.getTime()
            draw_square(white_square)
            if condition == (1,'interactive partner'):
                send_trigger(trigger_dict.get("Interactive partner 1 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Interactive partner 1 start\n")
            if condition == (2,'interactive partner'):
                send_trigger(trigger_dict.get("Interactive partner 2 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Interactive partner 2 start\n")
            if condition == (5,'interactive partner'):
                send_trigger(trigger_dict.get("Interactive partner 5 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Interactive partner 5 start\n")
            if condition == (1,'individual partner'):
                send_trigger(trigger_dict.get("Individual partner 1 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual partner 1 start\n")
            if condition == (2,'individual partner'):
                send_trigger(trigger_dict.get("Individual partner 2 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual partner 2 start\n")
            if condition == (5,'individual partner'):
                send_trigger(trigger_dict.get("Individual partner 5 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual partner 5 start\n")
            if condition == (1,'individual loner'):
                send_trigger(trigger_dict.get("Individual loner 1 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual loner 1 start\n")
            if condition == (2,'individual loner'):
                send_trigger(trigger_dict.get("Individual loner 2 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual loner 2 start\n")
            if condition == (5,'individual loner'):
                send_trigger(trigger_dict.get("Individual loner 5 start"))
                with open('debug.txt', 'a') as f:
                    f.write("Individual loner 5 start\n")
            if condition == (0, 'no go'):
                send_trigger(trigger_dict.get("No go start"))
                with open('debug.txt', 'a') as f:
                    f.write("No go start\n")

        if current_condition == "no go":
            moving_object_cond_mml.opacity = 0
            if i_frame/expInfo['frameRate'] > 3: # wait or 3 seconds before moving on to next condition
                continueRoutine = False

        elif current_condition == "interactive partner":

            if i_frame < n_response_frames:
                moving_object_cond_mml.pos = [positions_x[0], positions_y[0]]

            elif i_frame < n_response_frames + num_frames:

                if partner_movement_start == False:
                    draw_square(white_square)
                    if condition == (1, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 1 partner movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 1 partner movement onset\n")
                    if condition == (2, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 2 partner movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 2 partner movement onset\n")
                    if condition == (5, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 5 partner movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 5 partner movement onset\n")
                    partner_movement_start = True
                idx = i_frame-n_response_frames
                moving_object_cond_mml.pos = [positions_x[idx], positions_y[idx]]  # Update cursor position

                if [positions_x[idx], positions_y[idx]] == [positions_x[-1], positions_y[-1]]:
                    draw_square(white_square)
                    if condition == (1, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 1 partner movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 1 partner movement end\n")
                    if condition == (2, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 2 partner movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 2 partner movement end\n")
                    if condition == (5, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 5 partner movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 5 partner movement end\n")


            else:
            #elif i_frame-n_response_frames >= num_frames:

                moving_object_cond_mml.pos = [positions_x[-1], positions_y[-1]]

                if movement_begin == False:

                    movement_begin = True

                if mouse is None:
                    mouse = event.Mouse(win=win)

                if mouse.isPressedIn(moving_object_cond_mml) and pick_status == False:
                    first_click_time = globalClock.getTime()
                    draw_square(white_square)
                    if condition == (1, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 1 participant movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 1 participant movement onset\n")
                            f.write(f"{first_click_time}\n")
                    if condition == (2, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 2 participant movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 2 participant movement onset\n")
                            f.write(f"{first_click_time}\n")
                    if condition == (5, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 5 participant movement onset"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 5 participant movement onset\n")
                            f.write(f"{first_click_time}\n")
                    mouse_x, mouse_y = mouse.getPos()
                    # Update the polygon position based on mouse movement
                    moving_object_cond_mml.setPos((mouse_x, mouse_y))
                    moving_object_cond_mml.draw()
                    pick_status = True
                    trajectory_recording = True

                if trajectory_recording == True:
                    trajectory_positions.append(mouse.getPos())
                    trajectory_timestamps.append(globalClock.getTime())

                if pick_status == True:
                    mouse_x, mouse_y = mouse.getPos()
                    moving_object_cond_mml.setPos((mouse_x, mouse_y))

                if mouse.isPressedIn(participant_5):
                    second_click_time = globalClock.getTime()
                    pick_status = False
                    trajectory_recording = False
                    draw_square(white_square)
                    if condition == (1, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 1 participant movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 1 participant movement end\n")
                    if condition == (2, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 2 participant movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 2 participant movement end\n")
                    if condition == (5, "interactive partner"):
                        send_trigger(trigger_dict.get("Interactive partner 5 participant movement end"))
                        with open('debug.txt', 'a') as f:
                            f.write("Interactive partner 5 participant movement end\n")
                    continueRoutine = False

        else:
            if i_frame < n_response_frames:
                moving_object_cond_mml.pos = [positions_x[0], positions_y[0]]
            elif i_frame < n_response_frames + num_frames:
                if [positions_x[idx], positions_y[idx]] == [positions_x[1], positions_y[1]]:
                    draw_square(white_square)
                    if condition == (1,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 1 partner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 1 partner movement onset 1\n")
                    if condition == (2,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 2 partner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 2 partner movement onset 1\n")
                    if condition == (5,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 5 partner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 5 partner movement onset 1\n")
                    if condition == (1,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 1 loner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 1 loner movement onset 1\n")
                    if condition == (2,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 2 loner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 2 loner movement onset 1\n")
                    if condition == (5,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 5 loner movement onset 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 5 loner movement onset 1\n")


                idx = i_frame - n_response_frames
                moving_object_cond_mml.pos = [positions_x[idx], positions_y[idx]]

                if [positions_x[idx], positions_y[idx]] == [positions_x[-1], positions_y[-1]]:
                    draw_square(white_square)
                    if condition == (1,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 1 partner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 1 partner movement end 1\n")
                    if condition == (2,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 2 partner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 2 partner movement end 1\n")
                    if condition == (5,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 5 partner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 5 partner movement end 1\n")
                    if condition == (1,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 1 loner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 1 loner movement end 1\n")
                    if condition == (2,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 2 loner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 2 loner movement end 1\n")
                    if condition == (5,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 5 loner movement end 1"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 5 loner movement end 1\n")
            elif i_frame < n_response_frames + num_frames + n_wait_frames:
                moving_object_cond_mml.pos = [positions_x[-1], positions_y[-1]]
            elif i_frame < n_response_frames + num_frames + n_wait_frames + num_frames_reverse:
                if [positions_reverse_x[idx], positions_reverse_y[idx]] == [positions_reverse_x[1], positions_reverse_y[1]]:
                    draw_square(white_square)
                    if condition == (1,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 1 partner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 1 partner movement onset 2\n")
                    if condition == (2,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 2 partner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 2 partner movement onset 2\n")
                    if condition == (5,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 5 partner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 5 partner movement onset 2\n")
                    if condition == (1,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 1 loner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 1 loner movement onset 2\n")
                    if condition == (2,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 2 loner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 2 loner movement onset 2\n")
                    if condition == (5,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 5 loner movement onset 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 5 loner movement onset 2\n")

                idx = i_frame - (n_response_frames + num_frames + n_wait_frames)
                moving_object_cond_mml.pos = [positions_reverse_x[idx], positions_reverse_y[idx]]
                if [positions_reverse_x[idx], positions_reverse_y[idx]] == [positions_reverse_x[-1], positions_reverse_y[-1]]:
                    draw_square(white_square)
                    if condition == (1,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 1 partner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 1 partner movement end 2\n")
                    if condition == (2,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 2 partner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 2 partner movement end 2\n")
                    if condition == (5,"individual partner"):
                        send_trigger(trigger_dict.get("Individual partner 5 partner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual partner 5 partner movement end 2\n")
                    if condition == (1,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 1 loner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 1 loner movement end 2\n")
                    if condition == (2,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 2 loner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 2 loner movement end 2\n")
                    if condition == (5,"individual loner"):
                        send_trigger(trigger_dict.get("Individual loner 5 loner movement end 2"))
                        with open('debug.txt', 'a') as f:
                            f.write("Individual loner 5 loner movement end 2\n")
            else:
                moving_object_cond_mml.pos = [positions_reverse_x[-1], positions_reverse_y[-1]]
                continueRoutine = False


        # increment i_frame
        i_frame += 1
      End Routine:

        if first_click_time is not None and second_click_time is not None:
            print('HERE')
            print(first_click_time)
            print('AND')
            print(second_click_time)
            time_difference = second_click_time - first_click_time
            dict_temp['rt_participant'] = time_difference


        print(str(condition))
        print('trajectory positions')
        print(trajectory_positions)
        print('trajectory_timestamps')
        print(trajectory_timestamps)
        dict_temp['trajectory_positions'] = trajectory_positions
        dict_temp['trajectory_timestamps'] = trajectory_timestamps
        dict_temp['cond_start_time'] = cond_start_time


        print(dict_temp)
        with open(filename, mode='a', newline='') as file:
            writer = csv.DictWriter(file, fieldnames=dict_temp.keys())
            if file.tell() == 0:
                writer.writeheader()
            writer.writerow(dict_temp)

        for idx in range(N_POS):
            targets[idx].setLineColor(black_color)
    MouseComponent mouse_cond1
      clickable = moving_object_cond_mml, participant_5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [condition] = i_frame-350 >= num_frames
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    TextComponent partner_text_4
      color [set every frame] = $white_color
      letterHeight = 0.030
      pos [set every frame] = (partner_pos[0])/1000,(partner_pos[1]+67)/1000
      startVal [time (s)] = 0.0
      text [set every frame] = Partner
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    TextComponent loner_text_4
      color [set every frame] = $white_color
      letterHeight = 0.030
      pos [set every frame] = (loner_pos[0])/1000,(loner_pos[1]+67)/1000
      startVal [time (s)] = 0.0
      text [set every frame] = Loner
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    ImageComponent smiley_image_partner_4
      image = test_smiley5.png
      pos [set every frame] = partner_pos[0]/1000,(partner_pos[1]-8)/1000
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent smiley_image_loner_4
      image = test_smiley5.png
      pos [set every frame] = loner_pos[0]/1000,(loner_pos[1]-8)/1000
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent hand_icon_2
      image [set every frame] = $img
      pos = (0, 0.42)
      size [set every frame] = $hand_size
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine welcome_screen
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = n_total_trials
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    Routine do_fixation
    LoopInitiator fixation loopType="TrialHandler"
      loopType = random
      nReps = do_fixation
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      Routine block_start
      Routine blank_500
      Routine fixation_cross
      Routine blank_500
    LoopTerminator fixation
    Routine inter_trial_interval
    Routine calculate_path
    Routine cond
  LoopTerminator trials
  Routine goodbye_screen
